PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $[1, 1, 1]
  expName = Pilot_Alarm
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Routines
  Routine pilot
    ImageComponent arousal
      image = Arousal.jpg
      pos = (0, 365)
      size = (1850, 320)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent valence
      image = Valence.jpg
      pos = (0, -70)
      size = (1850, 320)
      startVal [time (s)] = 0.0
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    SliderComponent ar_resp
      borderColor = black
      color = dimgray
      fillColor = darkblue
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 20
      pos = (0, 165)
      size = (500, 50)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = pix
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    SliderComponent val_resp
      borderColor = black
      color = dimgray
      fillColor = darkblue
      forceEndRoutine = True
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 20
      pos = (0, -245)
      size = (500, 50)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = pix
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    SoundComponent alarms
      sound [set every repeat] = $alarm_loc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine instr
    TextComponent text
      color = black
      letterHeight = 22
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 1000
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      text:
        In this experiment you will be listening to different sounds. Your task is to indicate if the sound that you hear evokes positive or negative emotions and if it makes you feel calm or aroused.

        First, you will be shown the rating scale.

        The task will take about 3 minutes.

        To procede, please press "space".
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
    TextComponent text_2
      color = black
      letterHeight = 70
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
      units = pix
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  Routine scale
    ImageComponent arousal_1
      image = Arousal.jpg
      pos = (0, 365)
      size = (1850, 320)
      startVal [time (s)] = 0.0
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    ImageComponent valence_1
      image = Valence.jpg
      pos = (0, -70)
      size = [1850, 320]
      startVal [time (s)] = 0.0
      units = pix
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    SliderComponent pr_ar_resp
      borderColor = black
      color = dimgrey
      fillColor = darkblue
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 20
      pos = (0, 165)
      size = (500, 50)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = pix
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    SliderComponent pr_val_resp
      borderColor = black
      color = dimgrey
      fillColor = darkblue
      forceEndRoutine = True
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 20
      pos = (0, -245)
      size = (500, 50)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = pix
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    SoundComponent sound_1
      sound = BC_low_167.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine get_ready
    TextComponent text_3
      color = black
      letterHeight = 22
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        It's very important that you give your answer in the order: Arousal -> Valence. Otherwise, your response may not be recorded.

        To begin the experiment, please press 'space'.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  Routine scale
  Routine get_ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Cubicle_alarms.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'alarm_loc': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\Pilot_Alarms\\BC_low_167.wav'},
      {'alarm_loc': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\Pilot_Alarms\\BC_low_500.wav'},
      {'alarm_loc': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\Pilot_Alarms\\BC_low_833.wav'},
      {'alarm_loc': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\Pilot_Alarms\\CD_med_167.wav'},
      {'alarm_loc': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\Pilot_Alarms\\CD_med_500.wav'},
      {'alarm_loc': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\Pilot_Alarms\\CD_med_833.wav'},
      {'alarm_loc': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\Pilot_Alarms\\CG_high_167.wav'},
      {'alarm_loc': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\Pilot_Alarms\\CG_high_500.wav'},
      {'alarm_loc': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\Pilot_Alarms\\CG_high_833.wav'},
      {'alarm_loc': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\Pilot_Alarms\\BC_low_167.wav'},
      {'alarm_loc': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\Pilot_Alarms\\BC_low_500.wav'}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
    Routine pilot
    Routine fix
  LoopTerminator trials
