PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $(1.0000, 1.0000, 1.0000)
  expName = retrieval_45
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Routines
  Routine practice_instr
    ImageComponent map_b
      image = MAPB_USE.jpeg
      pos = (-300, 0)
      size = (1188, 650)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent pr_re_loc
      lineColor = black
      lineWidth = 5
      pos [set every repeat] = $[pr_loc_x, pr_loc_y]
      shape = rectangle
      size = (61, 60)
      startVal [time (s)] = 0.0
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    ImageComponent prObj1
      image [set every repeat] = $pr_obj1
      pos = (650, 405)
      size = (300, 250)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent prObj2
      image [set every repeat] = $pr_obj2
      pos = (650, 135)
      size = (300, 250)
      startVal [time (s)] = 0.0
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    ImageComponent prObj3
      image [set every repeat] = $pr_obj3
      pos = (650, -135)
      size = (300, 250)
      startVal [time (s)] = 0.0
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    ImageComponent prObj4
      image [set every repeat] = $pr_obj4
      pos = (650, -405)
      size = (300, 250)
      startVal [time (s)] = 0.0
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    KeyboardComponent pr_Respm
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pr_trials
    ImageComponent pr
      image = practice_retrieval.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start
    TextComponent text_4
      color = black
      letterHeight = 25
      startVal [time (s)] = 0.0
      text = This is the end of practice. Please, press space to proceed to the main part.
      wrapWidth = 800
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_exp
  Routine retr
    ImageComponent map
      image = map_gray.png
      pos = (-300, 0)
      size = $(1188, 650)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent polygon_2
      lineColor = black
      lineWidth = 5
      pos [set every repeat] = $[x_coord, y_coord]
      shape = rectangle
      size = (61, 60)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent obj_1
      image [set every repeat] = $obj1
      pos = (650, 405)
      size = (300, 250)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent obj_2
      image [set every repeat] = $obj2
      pos = (650, 135)
      size = (300, 250)
      startVal [time (s)] = 0.0
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    ImageComponent obj_3
      image [set every repeat] = $obj3
      pos = (650, -135)
      size = (300, 250)
      startVal [time (s)] = 0.0
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    ImageComponent obj_4
      image [set every repeat] = $obj4
      pos = (650, -405)
      size = (300, 250)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent resp_m
      allowedKeys = '1','2','3','4'
      correctAns = $cor_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine retr_fix
    TextComponent text_7
      color = black
      letterHeight = 100
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine instr
    TextComponent text
      color = black
      letterHeight = 22
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 800
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      text:
        *You will see a map with a highlighted location on the left of the screen.

        *There will be 4 art objects in black and white on the right of the screen.

        *Please choose the object that you think was presented with the highlighted location in the first part of the experiment.

        *After making a choice, please indicate the color and the frame of the chosen object.

        *After that, please indicate how sure you were about your responses.

        *To proceed, press 'space'.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pr_conf
    TextComponent text_3
      color = black
      letterHeight = 32
      pos = (0,180)
      startVal [time (s)] = 0.0
      text = Confidence
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    TextComponent text_8
      color = black
      letterHeight = 22
      pos = (0, 120)
      startVal [time (s)] = 0.0
      text = Right press any key from 1 to 5 to give a response.
      wrapWidth = 800
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    ImageComponent conf_rating
      image = confidence_rating.png
      pos = (0, -50)
      size = (780, 170)
      startVal [time (s)] = 0.0
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    KeyboardComponent pr_Confresp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
    TextComponent text_5
      color = black
      letterHeight = 100
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine conf
    TextComponent text_6
      color = black
      letterHeight = 30
      pos = (0, 170)
      startVal [time (s)] = 0.0
      text = Confidence
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    ImageComponent image_2
      image = confidence_rating.png
      pos = (0, 25)
      size = (780, 150)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_conf
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_9
      color = black
      letterHeight = 22
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        This is the end of the experiment.

        Thank you for participating!
        If you have any questions or comments about the study, feel free to ask the experimenter!

        To exit, press 'space'.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pr_open
    TextComponent instr_open
      color = black
      letterHeight = 22
      pos = (0, 150)
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 800
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      text:
        Please indicate the color and the type of frame of the chosen image.
        Example: purple, straight; purple, wiggly; purple, null.
    TextboxComponent pr_open_resp
      bold = False
      borderWidth = 1000
      color = black
      editable = True
      letterHeight = 20
      size = (None, None)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent pr_endButton
      color = $[-0.1765, -0.1765, -0.1765]
      letterHeight = 25
      pos = (0, -400)
      startVal [time (s)] = 0.0
      text = Click here to continue
      units = pix
      wrapWidth = 800
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    MouseComponent pr_click
      clickable = endButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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  Routine open_q
    TextComponent instr_openq
      color = black
      letterHeight = 22
      pos = (0, 150)
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        Please indicate the color and the type of frame of the chosen image.
        Example: purple, straight; purple, wiggly; purple, null.
    TextboxComponent openq_resp
      bold = False
      borderWidth = 800
      color = black
      editable = True
      letterHeight = 20
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent endButton
      color = $[-0.1765, -0.1765, -0.1765]
      letterHeight = 25
      pos = (0, -400)
      startVal [time (s)] = 0.0
      text = Click here to continue
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    MouseComponent eB_click
      clickable = endButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'pr_obj': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\practice\\034.gif', 'pr_loc_x': -729, 'pr_loc_y': 33, 'pr_obj1': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\practice\\034.gif', 'pr_obj2': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\practice\\064.gif', 'pr_obj3': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\practice\\114.gif', 'pr_obj4': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\practice\\142.gif', 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
    conditionsFile = Practice_V2.xlsx
    loopType = random
    nReps = 1
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    Routine practice_instr
    Routine pr_open
    Routine pr_conf
    Routine fix
  LoopTerminator trials
  Routine start
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Retrieval_45_rand.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'obj': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\149.gif', 'mask': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Objects\\Masks\\grey_noframe.png', 'x_coord': -663, 'y_coord': 98, 'sector': 'LALM', 'obj1': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\149.gif', 'obj2': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\216.gif', 'obj3': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\206.gif', 'obj4': 'C:\\Users\\saral\\Googl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,
      {'obj': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\096.gif', 'mask': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Objects\\Masks\\grey_noframe.png', 'x_coord': -861, 'y_coord': 163, 'sector': 'LALM', 'obj1': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\110.gif', 'obj2': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\096.gif', 'obj3': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\195.gif', 'obj4': 'C:\\Users\\saral\\Googl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,
      {'obj': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\196.gif', 'mask': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Objects\\Masks\\grey_noframe.png', 'x_coord': -729, 'y_coord': 163, 'sector': 'LALM', 'obj1': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\148.gif', 'obj2': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\090.gif', 'obj3': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\196.gif', 'obj4': 'C:\\Users\\saral\\Googl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,
      {'obj': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\255.gif', 'mask': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Objects\\Masks\\grey_noframe.png', 'x_coord': -795, 'y_coord': 98, 'sector': 'LALM', 'obj1': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\227.gif', 'obj2': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\218.gif', 'obj3': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\240.gif', 'obj4': 'C:\\Users\\saral\\Google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
    Routine retr
    Routine open_q
    Routine conf
    Routine retr_fix
  LoopTerminator trials_2
  Routine end
