PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $(1.0000, 1.0000, 1.0000)
  expName = retrieval_45
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Routines
  Routine practice_instr
    ImageComponent image
      image = Practice_final.png
      pos = (0, 85)
      size = (1530, 900)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = black
      letterHeight = 20
      pos = (0, -415)
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        *This is how it will look.
        *Next, you will see the confidence rating.
        *To proceed, press 'space'.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pr_trials
    ImageComponent pr
      image = practice_retrieval.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start
    TextComponent text_4
      color = black
      letterHeight = 25
      startVal [time (s)] = 0.0
      text = This is the end of practice. Please, press space to proceed to the main part.
      wrapWidth = 800
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_exp
  Routine retr
    ImageComponent map
      image = map_gray.png
      pos = (-300, 0)
      size = $(1188, 650)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent polygon_2
      lineColor = black
      lineWidth = 5
      pos [set every repeat] = $[x_coord, y_coord]
      shape = rectangle
      size = (61, 60)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent obj_1
      image [set every repeat] = $obj1
      pos = (470, 405)
      size = (270, 225)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent mask_1
      image [set every repeat] = $obj1_mask1
      pos = (470, 405)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    ImageComponent obj_2
      image [set every repeat] = $obj2
      pos = (470, 135)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    ImageComponent mask_2
      image [set every repeat] = $obj2_mask1
      pos = (470, 135)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    ImageComponent obj_3
      image [set every repeat] = $obj3
      pos = (470, -135)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    ImageComponent mask_3
      image [set every repeat] = $obj3_mask1
      pos = (470, -135)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    ImageComponent obj_4
      image [set every repeat] = $obj4
      pos = (470, -395)
      size = (270, 225)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent mask_4
      image [set every repeat] = $obj4_mask1
      pos = (470, -395)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    ImageComponent obj1_2
      image [set every repeat] = $obj1
      pos = (790, 405)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    ImageComponent mask_obj1_2
      image [set every repeat] = $obj1_mask2
      pos = (790, 405)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    ImageComponent obj2_2
      image [set every repeat] = $obj2
      pos = (790, 135)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    ImageComponent mask_obj2_2
      image [set every repeat] = $obj2_mask2
      pos = (790, 135)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    ImageComponent obj3_2
      image [set every repeat] = $obj3
      pos = (790, -135)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    ImageComponent mask_obj3_2
      image [set every repeat] = $obj3_mask2
      pos = (790, -135)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    ImageComponent obj4_2
      image [set every repeat] = $obj4
      pos = (790, -395)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    ImageComponent mask_obj4_2
      image [set every repeat] = $obj4_mask2
      pos = (790, -395)
      size = (270, 225)
      startVal [time (s)] = 0.0
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    TextComponent button1
      color = black
      font = Arial Black
      letterHeight = 20
      pos = (595, 281)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent button2
      color = black
      font = Arial Black
      letterHeight = 20
      pos = (915, 281)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent button3
      color = black
      font = Arial Black
      letterHeight = 20
      pos = (595, 11)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent button4
      color = black
      font = Arial Black
      letterHeight = 20
      pos = (915, 11)
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent button5
      color = black
      font = Arial Black
      letterHeight = 20
      pos = (595, -259)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent button6
      color = black
      font = Arial Black
      letterHeight = 20
      pos = (915, -259)
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent button7
      color = black
      font = Arial Black
      letterHeight = 20
      pos = (595, -519)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent button8
      color = black
      font = Arial Black
      letterHeight = 20
      pos = (915, -519)
      startVal [time (s)] = 0.0
      text = 8
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    KeyboardComponent key_resp_5
      allowedKeys = '1','2','3','4','5','6','7','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine retr_fix
    TextComponent text_7
      color = black
      letterHeight = 100
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine instr
    TextComponent text
      color = black
      letterHeight = 22
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 800
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      text:
        *You will see a map with a highlighted location on the left of the screen.

        *There will be 8 art objects on the right of the screen.

        *Please choose the object that you think was presented with the highlighted location in the first part of the experiment.

        *After making a choice, please indicate how sure you were about your response.

        *To proceed, press 'space'.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pr_conf
    TextComponent text_3
      color = black
      letterHeight = 32
      pos = (0,180)
      startVal [time (s)] = 0.0
      text = Confidence
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    TextComponent text_8
      color = black
      letterHeight = 22
      pos = (0, 120)
      startVal [time (s)] = 0.0
      text = Right press any key from 1 to 5 to give a response.
      wrapWidth = 800
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    ImageComponent conf_rating
      image = confidence_rating.png
      pos = (0, -50)
      size = (780, 170)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
    TextComponent text_5
      color = black
      letterHeight = 100
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine conf
    TextComponent text_6
      color = black
      letterHeight = 30
      pos = (0, 170)
      startVal [time (s)] = 0.0
      text = Confidence
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    ImageComponent image_2
      image = confidence_rating.png
      pos = (0, 25)
      size = (780, 150)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_9
      color = black
      letterHeight = 22
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        This is the end of the experiment.

        Thank you for participating!
        If you have any questions or comments about the study, feel free to ask the experimenter!

        To exit, press 'space'.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  Routine practice_instr
  Routine pr_conf
  Routine fix
  Routine start
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Re_45_final.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'obj': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\149.gif', 'mask': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Objects\\Masks\\grey_noframe.png', 'x_coord': -663, 'y_coord': 98, 'sector': 'LALM', 'obj1': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\149.gif', 'obj2': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\216.gif', 'obj3': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\206.gif', 'obj4': 'C:\\Users\\saral\\Googl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,
      {'obj': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\096.gif', 'mask': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Objects\\Masks\\grey_noframe.png', 'x_coord': -861, 'y_coord': 163, 'sector': 'LALM', 'obj1': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\110.gif', 'obj2': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\096.gif', 'obj3': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\195.gif', 'obj4': 'C:\\Users\\saral\\Googl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,
      {'obj': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\196.gif', 'mask': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Objects\\Masks\\grey_noframe.png', 'x_coord': -729, 'y_coord': 163, 'sector': 'LALM', 'obj1': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\148.gif', 'obj2': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\090.gif', 'obj3': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\196.gif', 'obj4': 'C:\\Users\\saral\\Googl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,
      {'obj': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\255.gif', 'mask': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Objects\\Masks\\grey_noframe.png', 'x_coord': -795, 'y_coord': 98, 'sector': 'LALM', 'obj1': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\227.gif', 'obj2': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\218.gif', 'obj3': 'C:\\Users\\saral\\Google Диск\\0-Year 2\\Thesis\\Internship\\Experiment\\Script\\240.gif', 'obj4': 'C:\\Users\\saral\\Google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
    Routine retr
    Routine conf
    Routine retr_fix
  LoopTerminator trials_2
  Routine end
